CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:35
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Reads the per-plate LoadData CSV generated by `cytopipe loaddata` (Metadata_Plate/Well/Site + Image_FileName_Orig<channel> columns only, this pipeline calculates the illumination function rather than applying one, so no Illum<channel> columns are needed here). The CSV path is set at run time via --data-file, so the values below are placeholders. Must stay the first module.']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
    Input data file location:Default Output Folder|E:\\Torkild
    Name of the file:ImageQC_W51_b3.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

Resize:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:3|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumDNA below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:4|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
    Select the input image:IllumDNA
    Name the output image:UpsampledIllumDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:5|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
    Select the input image:OrigER
    Name the output image:DownsampledER
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:6|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumER below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:7|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
    Select the input image:IllumER
    Name the output image:UpsampledIllumER
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:8|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
    Select the input image:OrigRNA
    Name the output image:DownsampledRNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:9|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumRNA below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:10|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
    Select the input image:IllumRNA
    Name the output image:UpsampledIllumRNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:11|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
    Select the input image:OrigAGP
    Name the output image:DownsampledAGP
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:12|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumAGP below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:13|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
    Select the input image:IllumAGP
    Name the output image:UpsampledIllumAGP
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:14|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
    Select the input image:OrigMito
    Name the output image:DownsampledMito
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:15|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notes:['Nothing to tune except possibly Block size/Smoothing filter size, if your images are much smaller/larger than usual. One of these five modules per channel, the output name (IllumMito below) is a fixed contract read back by 3_JUMP_analysis.cppipe.']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
    Select the input image:DownsampledMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:16|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
    Select the input image:IllumMito
    Name the output image:UpsampledIllumMito
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:17|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enabled:False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
    Select the input image:OrigBF
    Name the output image:DownsampledBF
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:18|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enabled:False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
    Select the input image:DownsampledBF
    Name the output image:IllumBF
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:19|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enabled:False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
    Select the input image:IllumBF
    Name the output image:UpsampledBF
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:20|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the input image:BFlow
    Name the output image:DownsampledBFlow
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:21|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the input image:DownsampledBFlow
    Name the output image:IllumBFlow
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:22|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the input image:IllumBF
    Name the output image:UpsampledBFlow
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:23|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the input image:BFhigh
    Name the output image:DownsampledBFhigh
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:24|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the input image:DownsampledBFhigh
    Name the output image:IllumBFhigh
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:25|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the input image:IllumBF
    Name the output image:UpsampledBFhigh
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

SaveImages:[module_num:26|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notes:['Fixed contract, the single file name (IllumAGP below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumAGP
    Select method for constructing file names:Single name
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    Enter single file name:IllumAGP
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:27|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notes:['Fixed contract, the single file name (IllumDNA below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumDNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:28|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notes:['Fixed contract, the single file name (IllumER below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumER
    Select method for constructing file names:Single name
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    Enter single file name:IllumER
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:29|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notes:['Fixed contract, the single file name (IllumMito below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumMito
    Select method for constructing file names:Single name
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    Enter single file name:IllumMito
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:30|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notes:['Fixed contract, the single file name (IllumRNA below, .npy format) is read back by exact name by the CorrectIlluminationApply modules in 3_JUMP_analysis.cppipe. Do not rename.']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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumRNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumRNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:UpsampledBF
    Select method for constructing file names:Single name
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    Enter single file name:_IllumBF
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    Saved file format:npy
    Output file location:Default Output Folder|\g<Experiment>\\\g<Date>\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:32|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:UpsampledBFhigh
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_IllumBFhigh
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    Saved file format:npy
    Output file location:Default Output Folder|D:\\IXMC_Server_fileshare\\AneMarit\\CellPainting REFINE U4\\2022-01-27\\22868\\CellPainting
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:33|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notes:['only use if Z-stacks are used for TL images']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:UpsampledBFlow
    Select method for constructing file names:Single name
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    Enter single file name:\g<Experiment>_IllumBFlow
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Output folder\\\g<Experiment>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

CreateBatchFiles:[module_num:34|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:Yes
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
ExportToSpreadsheet:[module_num:35|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|PathName_UpsampledIllumMito,Image|PathName_OrigOverlay2,Image|PathName_UpsampledIllumER,Image|PathName_OrigMito,Image|PathName_UpsampledIllumRNA,Image|PathName_UpsampledIllumAGP,Image|PathName_OrigER,Image|PathName_OrigAGP,Image|PathName_OrigDNA,Image|PathName_OrigRNA,Image|PathName_UpsampledIllumDNA,Image|Metadata_Well,Image|Metadata_Date,Image|Metadata_Series,Image|Metadata_FileLocation,Image|Metadata_Time,Image|Metadata_ChannelNumber,Image|Metadata_Site,Image|Metadata_Frame,Image|Metadata_PlateID,Image|Metadata_Experiment,Image|FileName_OrigRNA,Image|FileName_UpsampledIllumRNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2_illum correction_b2
    Overwrite existing files without warning?:Yes
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