CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:42
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Reads the per-plate LoadData CSV generated by `cytopipe loaddata --with-illum` (Metadata_Plate/Well/Site, Image_FileName_Orig<channel>, and Image_FileName_Illum<channel> columns), replacing the Images/Metadata/NamesAndTypes chain that extracted metadata from filenames directly. The CSV path is set at run time via --data-file, so the values below are placeholders. Must stay the first module.']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
    Input data file location:Default Output Folder|D:\\IXMC_Server_fileshare\\Pia\\2025-W51\\Output
    Name of the file:Loaddata_W51.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:3|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:Mito, OrigAGP, OrigDNA, OrigER, OrigMito, OrigRNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:4|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:5|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder sub-folder|qc
    Rules file name:is_saturated_rules.txt
    Class number:2
    Allow fuzzy feature matching?:No
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../qc
    Rules file name:is_blurry_rules.txt
    Class number:2
    Allow fuzzy feature matching?:No
    Ignore flag skips on last cycle?:No

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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notes:['Identifies ALL nuclei in image though we will only take measurements on those NOT touching the border of the image (filtered at a later step)']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:NucleiIncludingEdges
    Typical diameter of objects, in pixel units (Min,Max):25,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['Identifies ALL cells in image though we will only take measurements on those coming from nuclei NOT touching the border of the image (filtered at a later step)']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
    Select the input objects:NucleiIncludingEdges
    Name the objects to be identified:CellsIncludingEdges
    Select the method to identify the secondary objects:Propagation
    Select the input image:AGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.008,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
FilterObjects:[module_num:10|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notes:['Filter the object sets that do have edges (NucleiIncludingEdges and CellIncludingEdges) so we have additional object sets that do NOT touch the edge of the well that we will use for measurements (Nuclei and Cells).']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
    Select the objects to filter:NucleiIncludingEdges
    Name the output objects:Nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedObjects
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    Select additional object to relabel:CellsIncludingEdges
    Name the relabeled objects:Cells
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:12|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notes:['Have to Check \x97>Beth mentioned something\x97>either have it at fastest or  have the Costes OFF']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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:13|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Select objects to measure:Nuclei, Cytoplasm, Cells

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:18|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:20|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
    Select images to measure:AGP, DNA, ER, Mito, RNA
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

EnhanceOrSuppressFeatures:[module_num:21|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notes:['1/5 additional modules for special mitochondrial features', 'Enhances the neurite structure in the Mito image.']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enabled:False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
    Select the input image:Mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:22|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notes:['2/5 additional modules for special mitochondrial features', 'Thresholds the enhanced mito image']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enabled:False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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
MorphologicalSkeleton:[module_num:23|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notes:['3/5 additional modules for special mitochondrial features', 'Creates a skeleton from the thresholded mito image']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enabled:False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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:24|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notes:['4/5 additional modules for special mitochondrial features', 'Measures the skeletonized mito image']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enabled:False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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectIntensityDistribution:[module_num:25|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notes:['5/5 additional modules for special mitochondrial features', 'Measures the radial distribution of the enhanced mito image.']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enabled:False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
    Select images to measure:mito_tubeness
    Hidden:2
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:200

MaskImage:[module_num:26|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:DNA
    Name the output image:DNA_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:27|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:AGP
    Name the output image:AGP__BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:28|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:ER
    Name the output image:ER__BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:29|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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enabled:False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
    Select the input image:BFHigh
    Name the output image:BFHigh__BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:30|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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enabled:False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
    Select the input image:BFLow
    Name the output image:BFLow_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:31|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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enabled:False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
    Select the input image:BF
    Name the output image:Brightfield_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:32|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:Mito
    Name the output image:Mito_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:33|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:RNA
    Name the output image:RNA_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

GrayToColor:[module_num:34|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Mito
    Select the image to be colored green:AGP
    Select the image to be colored blue:DNA
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.2
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
ImageMath:[module_num:35|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColorImage
    Multiply the first image by:2
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:36|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notes:['Measures the ntensity of the whole image (AGP, BFHigh, BFLow, Brightfield, DNA, ER, Mito, RNA) as well as the intensity of the image only in regions without cells (* _BackgroundOnly).']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enabled:False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
    Select images to measure:AGP, AGP__BackgroundOnly, DNA, DNA_BackgroundOnly, ER, ER__BackgroundOnly, Mito, Mito_BackgroundOnly, RNA, RNA_BackgroundOnly
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
OverlayOutlines:[module_num:37|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#EFEFEF
    Select objects to display:Nuclei
    Select outline color:light grey
    Select objects to display:Cells

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:\g<Plate>_\g<Well>_\g<Site>_outlines
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|3_Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:39|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notes:['We explicitly set which measurement types to export so that we do NOT export measurements of the objects touching the well edges as we ONLY want them for masking and not to use for measurements.', '', 'We have turned off the exporting of measurements starting with the word Location for Cells and Cytoplasm and the duplicate Number_Object_Number from Cells, because a) those measurements are not useful on their own (only relative to one another, which is not an analysis we currently ever perform) and b) we were previously exporting >2000 measurements for those compartments, which would complicate using SQLite if not manually compiled to allow >2000 columns.']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Exported Files
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
    Select the image to use as the identifier:OrigDNA
    Select the metadata to use as the identifier:Metadata_Well
    Export all measurement types?:No
    Press button to select measurements:Image|Texture_SumEntropy_Mito_5_00_256,Image|Texture_SumEntropy_Mito_5_03_256,Image|Texture_SumEntropy_Mito_5_02_256,Image|Texture_SumEntropy_Mito_5_01_256,Image|Texture_SumEntropy_Mito_3_02_256,Image|Texture_SumEntropy_Mito_3_01_256,Image|Texture_SumEntropy_Mito_3_00_256,Image|Texture_SumEntropy_Mito_3_03_256,Image|Texture_SumEntropy_Mito_10_00_256,Image|Texture_SumEntropy_Mito_10_03_256,Image|Texture_SumEntropy_Mito_10_02_256,Image|Texture_SumEntropy_Mito_10_01_256,Image|Texture_SumEntropy_RNA_3_03_256,Image|Texture_SumEntropy_RNA_3_00_256,Image|Texture_SumEntropy_RNA_3_02_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Macrophage_U47
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Exported Files\\\g<Plate>_\g<Well>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Texture_AngularSecondMoment_DNA_5_00_256,Cells|Texture_AngularSecondMoment_DNA_5_01_256,Cells|Texture_AngularSecondMoment_DNA_5_03_256,Cells|Texture_AngularSecondMoment_DNA_5_02_256,Cells|Texture_AngularSecondMoment_DNA_3_00_256,Cells|Texture_AngularSecondMoment_DNA_3_01_256,Cells|Texture_AngularSecondMoment_DNA_3_02_256,Cells|Texture_AngularSecondMoment_DNA_3_03_256,Cells|Texture_AngularSecondMoment_DNA_10_01_256,Cells|Texture_AngularSecondMoment_DNA_10_03_256,Cells|Texture_AngularSecondMoment_DNA_10_00_256,Cells|Texture_AngularSecondMoment_DNA_10_02_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:41|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notes:['Fixed contract, the SQLite filename (measurements.sqlite) and the exported object list (Select the objects Cells,Cytoplasm,Nuclei, below) are read by exact name by cytopipe and pycytominer downstream. Do not rename/remove them, or add a 4th object, without also updating cytopipe.', '', 'Adding measurements is safe as long as they attach to Cells, Cytoplasm, or Nuclei. This module exports every measurement for the selected objects (not a fixed column list), so a new Measure* module targeting one of them reaches results/ automatically with no other change. See docs/cppipe-guide.md.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:measurements.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Workspace measurement count:1
    Experiment name:Macrophage_U44
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    Export object relationships?:No
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Object
    Enter the object name:Nuclei
    Select the X-axis measurement:Number_Object_Number
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Object
    Enter the object name:Nuclei
    Select the Y-axis measurement:Intensity_IntegratedIntensity_DNA
    Select the Y-axis index:ImageNumber

ExportToSpreadsheet:[module_num:42|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notes:['We explicitly set which measurement types to export so that we do NOT export measurements of the objects touching the well edges as we ONLY want them for masking and not to use for measurements.', '', 'We have turned off the exporting of measurements starting with the word Location for Cells and Cytoplasm and the duplicate Number_Object_Number from Cells, because a) those measurements are not useful on their own (only relative to one another, which is not an analysis we currently ever perform) and b) we were previously exporting >2000 measurements for those compartments, which would complicate using SQLite if not manually compiled to allow >2000 columns.']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
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    Select the metadata to use as the identifier:ImageNumber
    Export all measurement types?:Yes
    Press button to select measurements:Cells|Texture_Variance_DNA_5_01_256,Cells|Texture_Variance_DNA_5_03_256,Cells|Texture_Variance_DNA_5_00_256,Cells|Texture_Variance_DNA_5_02_256,Cells|Texture_Variance_DNA_3_00_256,Cells|Texture_Variance_DNA_3_01_256,Cells|Texture_Variance_DNA_3_03_256,Cells|Texture_Variance_DNA_3_02_256,Cells|Texture_Variance_DNA_10_03_256,Cells|Texture_Variance_DNA_10_00_256,Cells|Texture_Variance_DNA_10_01_256,Cells|Texture_Variance_DNA_10_02_256,Cells|Texture_Variance_ER_5_01_256,Cells|Texture_Variance_ER_5_03_256,Cells|Texture_Variance_ER_5_00_256,Cells|Texture_Variance_ER_5_02_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:U12 U2OS
    Overwrite existing files without warning?:Yes
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