CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Reads the per-plate LoadData CSV generated by `cytopipe loaddata` (Metadata_Plate/Well/Site + Image_FileName_Orig<channel> columns), replacing the Images/Metadata/NamesAndTypes chain that extracted metadata from filenames directly. The CSV path is set at run time via --data-file, so the values below are placeholders.']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
    Input data file location:Default Output Folder|
    Name of the file:load_data.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

Groups:[module_num:2|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

FlagImage:[module_num:3|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notes:['JUMP: This is not used, and is deselected.']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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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    Ignore flag skips on last cycle?:No

MeasureImageQuality:[module_num:4|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notes:['JUMP: Nothing to tune.', 'JUMP: This measures per-image QC features, except for thresholds.', 'Produces the ImageQuality_PowerLogLogSlope_Orig<Channel> columns (one per channel) that `cytopipe qc review` reads to build the image-review gallery. The spatial scale values above (5/10/20/50) are the tunable part, do not disable this module if you want the review gallery to work.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:5|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notes:['JUMP: This measures thresholds in both the DNA and RNA channels.', 'JUMP: Nothing to tune, UNLESS the segmentation is bad.', 'Blur metrics are off here (see the module above for PowerLogLogSlope), this one only feeds the threshold measurements.']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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA, OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

CorrectIlluminationCalculate:[module_num:6|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notes:['JUMP: Nothing to tune (except possibly the Block Size and Smoothing Filter Size, in case your images are very small/large)', 'JUMP: This calculates the Per-Image illumination function.', 'NOTE: This assumes that the cells are NOT confluent, and thus that there wil be background intensity pixels spread across the image.']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
    Select the input image:OrigDNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['JUMP: Nothing to tune.', 'JUMP: This applies the Per-Image illumination function.']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
    Select the input image:OrigDNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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notes:['Segmentation input is CorrBlue (illum-corrected DNA), but the sizing/declumping settings below are the original nuclei.cppipe tuning, not 1_QC.cppipe tuning - kept as-is to avoid changing which/how many nuclei get exported to the DeepProfiler bridge.']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['JUMP: Could tune Threshold Correction factor, but hopefully not']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigRNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,.06
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyTertiaryObjects:[module_num:10|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notes:['JUMP: Nothing to tune.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:11|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notes:['JUMP: Nothing to tune.']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
    Select images to measure:OrigAGP, OrigDNA, OrigER, OrigMito, OrigRNA
    Select objects to measure:Cells, Nuclei

MeasureImageIntensity:[module_num:12|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notes:['JUMP: Nothing to tune.']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
    Select images to measure:OrigAGP, OrigDNA, OrigER, OrigMito, OrigRNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells, Nuclei
    Calculate custom percentiles:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['JUMP: Nothing to tune.']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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RescaleIntensity:[module_num:14|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notes:['JUMP: Nothing to tune.', 'Only used for the Saved image.  This will not affect the raw images']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
    Select the input image:OrigDNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:15|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notes:['JUMP: Nothing to tune.', 'Only used for the Saved image.  This will not affect the raw images']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
    Select the input image:OrigRNA
    Name the output image:RescaleRNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:16|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
    Select the input image:OrigAGP
    Name the output image:RescaleAGP
    Rescaling method:Stretch each image to use the full intensity range
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
ExportToSpreadsheet:[module_num:17|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notes:['JUMP: Nothing to tune.', 'This is used to output a subset of results for QC purposes.']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|\g<Plate>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Intensity_MADIntensity_OrigER_Cells,Image|Intensity_MADIntensity_OrigRNA_Cells,Image|Intensity_MADIntensity_OrigAGP_Cells,Image|Intensity_MADIntensity_OrigMito_Cells,Image|Intensity_MADIntensity_OrigDNA_Cells,Image|Intensity_MedianIntensity_OrigMito_Cells,Image|Intensity_MedianIntensity_OrigDNA_Cells,Image|Intensity_MedianIntensity_OrigAGP_Cells,Image|Intensity_MedianIntensity_OrigER_Cells,Image|Intensity_MedianIntensity_OrigRNA_Cells,Image|Count_Cells,Image|Metadata_WellCol,Image|Metadata_WellRow,Image|Metadata_Plate,Image|FileName_OrigOverlay2,Image|PathName_OrigOverlay2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:TopLine
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

GrayToColor:[module_num:18|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notes:['JUMP: Nothing to tune.', 'Only used for the Saved image.  This will not affect the raw images']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:RescaleRNA
    Select the image to be colored green:OrigER
    Select the image to be colored blue:RescaleDNA
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:19|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notes:['JUMP: Nothing to tune.', 'Only used for the Saved image.  This will not affect the raw images']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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColorImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:20|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notes:['JUMP: Nothing to tune.', 'Only used for the Saved image.  This will not affect the raw images', 'The pseudo-color channel assignment in the GrayToColor module above is freely tunable if you want a different composite. The output path this feeds into (see the following SaveImages module) is a fixed contract, not this coloring.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:light grey
    Select objects to display:Cells

Resize:[module_num:21|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notes:['Shrinks the composite overlay before SaveImages, purely for the QC review gallery: cytopipe embeds every overlay thumbnail directly in gallery.html, so saving at full microscope resolution would make that file scale into the gigabytes. 256x256 is plenty to eyeball blur/debris/artifacts.']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
    Select the input image:OrigOverlay2
    Name the output image:OrigOverlay2Small
    Resizing method:Resize by specifying desired final dimensions
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    Width (x) of the final image:256
    Height (y) of the final image:256
    # of planes (z) in the final image:10
    Interpolation method:Bilinear
    Method to specify the dimensions:Manual
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    Additional image count:0

SaveImages:[module_num:22|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notes:['JUMP: Nothing to tune.', 'Depending on the metadata extracted, you might need to adjust the "single file name".  (Note: right click to get extracted Metadata tags)', 'Fixed contract, the Overlays/<Plate>_<Well>_<Site>_overlay.png path and name (below) is the thumbnail source `cytopipe qc review` scans for the image-review gallery. Do not rename, relocate, or disable this module.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2Small
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_\g<Site>_overlay
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

OverlayOutlines:[module_num:23|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notes:['JUMP: This will overlay a Nuclear segmentation outline onto a DNA image.', '', 'Unslected by default, but you may select it along with the following SaveImages.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Cells

SaveImages:[module_num:24|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notes:['JUMP: This will save the nuclear segmentation outline from the previous OverlayOutlines module.', '', 'Unslected by default, but you may select it along with the previous OverlayOutlines module.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:25|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notes:['JUMP: Nothing to tune.', 'This is used to output ALL the results.']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:26|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Nuclei.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigAGP,OrigDNA,OrigER,OrigMito,OrigOverlay2,OrigRNA
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:Nuclei
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:Count_Nuclei
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_FocusScore_OrigDNA
    Select the Y-axis index:ImageNumber

ExportToSpreadsheet:[module_num:27|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notes:['JUMP: Nothing to tune.', 'This is used to output ALL the results.', 'Fixed contract, the per-well QCb3/<Plate>_<Well>/Image.csv path and shape (below) is scanned by `cytopipe qc review` to build the image-review gallery. Do not rename, relocate, or disable this module.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|QCb3/\g<Plate>_\g<Well>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:28|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notes:['Kept from the original nuclei.cppipe: this is what CYTOPIPE_BRIDGE / DeepProfiler consume as per-site nuclei locations. Do not rename/relocate without updating CELLPROFILER_NUCLEI in nextflow/modules/cellprofiler.nf.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|locations/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Location_Center_X,Nuclei|Location_Center_Y
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<Well>-\g<Site>-Nuclei.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:29|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notes:['Kept from the original nuclei.cppipe: flat per-chunk Image.csv that CELLPROFILER_NUCLEI renames and CYTOPIPE_BRIDGE consumes. Do not rename/relocate without updating CELLPROFILER_NUCLEI in nextflow/modules/cellprofiler.nf. The richer per-well Image.csv from module 27 (under QCb3\\<Plate>_<Well>) is kept separately for QC parity.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Site,Image|Metadata_Well,Image|Metadata_Plate,Image|FileName_OrigDNA,Image|FileName_OrigRNA,Image|FileName_OrigAGP,Image|FileName_OrigER,Image|FileName_OrigMito
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
