CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "thumb")

Metadata:[module_num:2|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notes:['', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Experiment>[^_]+(?:-[^_]+)*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/\\](?P<Date>\d{4}-\d{2}-\d{2})[/\\](?P<Plate>\d{5})[/\\]TimePoint_(?P<TimePoint>[0-9]+)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Match metadata:[{'OrigDNA': 'Well', 'OrigMito': 'Well', 'OrigAGP': 'Well', 'OrigRNA': 'Well', 'OrigER': 'Well', 'IllumDNA': 'Well', 'IllumMito': 'Well', 'IllumAGP': 'Well', 'IllumRNA': 'Well', 'IllumER': 'Well'}, {'OrigDNA': 'Site', 'OrigMito': 'Site', 'OrigAGP': 'Site', 'OrigRNA': 'Site', 'OrigER': 'Site', 'IllumDNA': 'Site', 'IllumMito': 'Site', 'IllumAGP': 'Site', 'IllumRNA': 'Site', 'IllumER': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:5
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:ILLUM_PLACEHOLDER/IllumDNA.npy
    Name to assign this image:IllumDNA
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    Select the image type:Illumination function
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    Single image location:file:ILLUM_PLACEHOLDER/IllumMito.npy
    Name to assign this image:IllumMito
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    Select the image type:Illumination function
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    Single image location:file:ILLUM_PLACEHOLDER/IllumAGP.npy
    Name to assign this image:IllumAGP
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    Select the image type:Illumination function
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    Single image location:file:ILLUM_PLACEHOLDER/IllumRNA.npy
    Name to assign this image:IllumRNA
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    Select the image type:Illumination function
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    Single image location:file:ILLUM_PLACEHOLDER/IllumER.npy
    Name to assign this image:IllumER
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    Select the image type:Illumination function
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:6|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
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:7|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
    Select the input image:OrigAGP
    Name the output image:CorrAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigRNA
    Name the output image:CorrRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrAGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:15|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

MeasureColocalization:[module_num:16|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:17|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToDatabase:[module_num:19|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:measurements.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:cytopipe
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    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|images/
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:CorrMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigMito
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|images/
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:CorrAGP
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigAGP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|images/
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:CorrRNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigRNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|images/
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:CorrER
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigER
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|images/
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|locations/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Location_Center_X,Nuclei|Location_Center_Y
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<Well>-\g<Site>-Nuclei.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Site,Image|Metadata_Well,Image|Metadata_Plate,Image|FileName_OrigDNA,Image|FileName_OrigRNA,Image|FileName_OrigAGP,Image|FileName_OrigER,Image|FileName_OrigMito
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
